# 
sv:Ph/Default/Modules = 2 "TsEmDNAPhysics" "TsEmDNAChemistry"

s:Ch/ChemistryName = "TOPASChemistry" 
includeFile = inputdata/TOPASChemistry.txt

b:Ch/TOPASChemistry/ChemicalStageTransportActive     = "True"
d:Ch/TOPASChemistry/ChemicalStageTimeEnd             = 3.0 ns
dv:Ch/TOPASChemistry/ChemicalStageTimeStepsHighEdges = 5 1.0  3.0   10.0   100.0  1000.0  ps 
dv:Ch/TOPASChemistry/ChemicalStageTimeStepsResolutions = 5 0.1  1.0   10.0   100.0  1000.0  ps 

s:Ch/TOPASChemistry/RemoveInMaterial = "G4_WATER_MODIFIED"
sv:Ch/TOPASChemistry/RemoveInMaterialTheseMolecules = 7 "solvatedelectron" "hydroxyl" "hydrogenperoxide" "hydrogen"  "hydronium" "dyhydrogen" "hydroxide" 

Ge/World/HLX= 1 um  
Ge/World/HLY= 1 um  
Ge/World/HLZ= 2 um  
Ge/World/Material ="G4_WATER"

s:Ge/subWorld/Parent = "World"
s:Ge/subWorld/Type = "TsBox"
d:Ge/subWorld/HLX= 1 um  
d:Ge/subWorld/HLY= 1 um  
d:Ge/subWorld/HLZ= 2 um  
s:Ge/subWorld/Material ="G4_WATER"


s:Ma/G4_WATER_MODIFIED/CloneFromMaterial = "G4_WATER"
d:Ma/G4_WATER_MODIFIED/CloneWithDensity  = 1.0 g/cm3

iv:Gr/Color/TransparentYellow = 4 255 255 0 50

s:Ge/removeRegion/Parent = "SubWorld"
s:Ge/removeRegion/Type   = "G4Orb"
s:Ge/removeRegion/Material = "G4_WATER_MODIFIED"
s:Ge/removeRegion/Color    = "TransparentYellow"
s:Ge/removeRegion/DrawingStyle = "Solid"
d:Ge/removeRegion/R        = 0.3 um
#d:Ge/removeRegion/TransY   = 0.3 um 

Ge/BeamPosition/TransZ = -1.0 * Ge/World/HLZ um  
Ge/BeamPosition/RotX = 0 deg 

s:Sc/NumberOfMoleculesAtTime/Quantity   = "TsSBSMoleculesAtTime" 
s:Sc/NumberOfMoleculesAtTime/Component   = "SubWorld"
b:Sc/NumberOfMoleculesAtTime/OutputToConsole = "True"
s:Sc/NumberOfMoleculesAtTime/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/NumberOfMoleculesAtTime/PropagateToChildren = "True"
# Record time, do not confuse with Time features.
i:Sc/NumberOfMoleculesAtTime/TimeBins   = 20
d:Sc/NumberOfMoleculesAtTime/TimeBinMin = 1.0 ps
d:Sc/NumberOfMoleculesAtTime/TimeBinMax = 999999 ps
b:Sc/NumberOfMoleculesAtTime/TimeBinLog = "True"
s:Sc/NumberOfMoleculesAtTime/OutputType = "ascii" # or root
s:Sc/NumberOfMoleculesAtTime/OutputFile = "Chemistry_RemoveChemicalSpeciesInVolume"


So/Demo/BeamPositionDistribution = "None"
So/Demo/BeamEnergySpread = 0 
So/Demo/BeamParticle = "proton"
So/Demo/BeamEnergy = 300 MeV 
So/Demo/NumberOfHistoriesInRun = 10

Ts/NumberOfThreads = 1 
b:Ts/ShowCPUTime = "True"
i:Ts/Seed = 1 

