# TOPAS-nBio example : Charlton DNA model
# Charlton DNA segment is placed in a box, specify the number of base-pairs to be simulated.
#
# Simple single and double strand breaks are scored.

b:Ge/QuitIfOverlapDetected="true"
Ts/ShowHistoryCountAtInterval = 100
i:Ts/Seed = 1

d:Ge/World/HLX=100 nm
d:Ge/World/HLY=100 nm
d:Ge/World/HLZ=100 nm
b:Ge/World/Invisible = "True"

s:Ge/MyDNA/Type="TsCharltonDNA"
s:Ge/MyDNA/Parent="world"
s:Ge/MyDNA/Material="G4_WATER"
i:Ge/MyDNA/NumberOfBasePairs = 10

# Material for volumes in strand 1
s:Ma/G4_WATER_MODIFIED_1/CloneFromMaterial = "G4_WATER"
d:Ma/G4_WATER_MODIFIED_1/CloneWithDensity  = 1.0 g/cm3

# Auxiliar material for volumes in strand 2
s:Ma/G4_WATER_MODIFIED_2/CloneFromMaterial = "G4_WATER_MODIFIED_1"
d:Ma/G4_WATER_MODIFIED_2/CloneWithDensity  = 1.0 g/cm3

#Modified water material is needed for scoring strand breaks:
s:Ge/MyDNA/BasePair/Material="G4_WATER_MODIFIED_1"
s:Ge/MyDNA/Backbone1/Material="G4_WATER_MODIFIED_1"
s:Ge/MyDNA/Backbone2/Material="G4_WATER_MODIFIED_2"

s:Ge/MyDNA/BasePair/DrawingStyle="solid"
s:Ge/MyDNA/Backbone1/Color="red"
s:Ge/MyDNA/Backbone1/DrawingStyle="solid"
s:Ge/MyDNA/Backbone2/Color="blue"
s:Ge/MyDNA/Backbone2/DrawingStyle="solid"

sv:Ph/Default/Modules = 1 "g4em-dna"

# -- Scorer --
s:Sc/Geometry_CharltonDNA/Quantity				= "DNADamageStepByStep"
includeFile									= inputdata/DNAScorerStepByStep.txt
s:Sc/Geometry_CharltonDNA/Component 				= "MyDNA"
i:Sc/Geometry_CharltonDNA/NumberOfHistoriesInRun = So/Example/NumberOfHistoriesInRun
i:Sc/Geometry_CharltonDNA/BasePairPositionAtGeometricHierarchy = 0
sv:Sc/Geometry_CharltonDNA/Strand1MaterialNames  = 1 "G4_WATER_MODIFIED_1"
sv:Sc/Geometry_CharltonDNA/Strand2MaterialNames  = 1 "G4_WATER_MODIFIED_2"
s:Sc/Geometry_CharltonDNA/PrimaryParticle		= So/Example/BeamParticle
d:Sc/Geometry_CharltonDNA/MeanEnergy				= So/Example/BeamEnergy MeV
s:Sc/Geometry_CharltonDNA/OutputType = "ASCII"
s:Sc/Geometry_CharltonDNA/OutputFile = "Geometry_CharltonDNA"


# Set a source
s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               = 5 MeV
u:So/Example/BeamEnergySpread         = 0.757504
s:So/Example/BeamPositionDistribution = "None"
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Example/NumberOfHistoriesInRun   = 10

b:Ts/ShowCPUTime = "True"
