# TOPAS-nBio example: simple ellipsoid cell
# To include a nucleus at the center of the cell, specify the nucleus radius. 
# To include mitochondria, randomly positioned in the cytoplasm, specify the number of mitochondria.
# 

# Since mitochondria are arranged randomly, this check should be switched off to allow the randomize algorithm to work.
b:Ge/QuitIfOverlapDetected="false"
i:Ts/Seed = 1

d:Ge/World/HLX=25 um
d:Ge/World/HLY=25 um
d:Ge/World/HLZ=25 um
b:Ge/World/Invisible = "True"
s:Ge/World/Material = "G4_WATER"

s:Ge/MyCell/Type="TsEllipsoidCell"
s:Ge/MyCell/Material="G4_WATER"
s:Ge/MyCell/Parent="World"
d:Ge/MyCell/xSemiAxis=20 um
d:Ge/MyCell/ySemiAxis=10 um
d:Ge/MyCell/zSemiAxis=15 um
s:Ge/MyCell/Color="magenta"
# Assign a component to a region. By
# default, all the children volumes will
# share the same region

#Nucleus
d:Ge/MyCell/Nucleus/NucleusRadius=5. um
s:Ge/MyCell/Nucleus/Material="G4_WATER"
s:Ge/MyCell/Nucleus/Color="red"
s:Ge/MyCell/Nucleus/DrawingStyle="solid"
d:Ge/MyCell/Nucleus/TranslateZ = -5. um
s:Ge/MyCell/Nucleus/AssignToRegionNamed = "G4DNA"

#Mitochondria
i:Ge/MyCell/Mitochondria/NumberOfMitochondria=10
d:Ge/MyCell/Mitochondria/a=0.5 um
d:Ge/MyCell/Mitochondria/b=0.3 um
d:Ge/MyCell/Mitochondria/c=0.9 um
s:Ge/MyCell/Mitochondria/Material="G4_WATER"
s:Ge/MyCell/Mitochondria/Color="grass"
s:Ge/MyCell/Mitochondria/DrawingStyle="solid"

s:Sc/Physics_ModelPerRegion/Quantity = "EnergyDeposit"
s:Sc/Physics_ModelPerRegion/Component = "MyCell"
s:Sc/Physics_ModelPerRegion/OutputType = "CSV"
s:Sc/Physics_ModelPerRegion/OutputFile = "Physics_ModelPerRegion"

# Define condensed-history em model anywhere
sv:Ph/Default/Modules = 1 "g4em-livermore"
# But geant4-dna in the G4DNA region. 
s:Ph/Default/ForRegion/G4DNA/ActiveG4EmModelFromModule = "g4em-dna"

# Shoot few particles
d:So/Demo/BeamEnergy = 100 MeV
s:So/Demo/BeamPositionDistribution = "None"
i:So/Demo/NumberOfHistoriesInRun   = 25

d:Ge/BeamPosition/TransZ = -25 um
d:Ge/BeamPosition/TransY = -5 um
d:Ge/BeamPosition/RotX   = 5 deg

b:Ts/ShowCPUTime = "True"
